PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participantID'], expName, expInfo['date'])
  Experiment info = {'participantID': '["A800", "A470", "B870"]'}
  Full-screen window = True
  Monitor = fortis_m
  Save excel file = True
  Save log file = False
  Save psydat file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(0.8824, 1.0000, 1.0000)
  expName = idea_eval
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
  rush = True
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent initialiseConditions
      Code Type = Auto->JS
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      Begin Experiment:
        skipConfidence = False
        skipSource = False
        ceInstructionCount = 0
        prevCoreItem = ''
        currentCoreItem = ''
    CodeComponent getParticipantId
      Code Type = Auto->JS
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      Begin Experiment:
        participantId = expInfo['participantID']
        stimuliPath = f'./stimuli/{participantId}_ideas.csv'
    TextComponent inastructionText
      color = black
      durationEstim = 4
      font = Courier New
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Сейчас вам будет показан список идей.

        Для каждой идеи ответьте на вопрос:  помните ли вы, что эта идея была озвучена  кем-либо из участников во время сессии?

        Если помните — вы оцените свою уверенность  в том, кто именно был автором идеи.

        Для начала нажмите ПРОБЕЛ
    KeyboardComponent proceedKey
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine thank_you
    RoutineSettingsComponent thank_you
      saveStartStop = False
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    TextComponent thankYouText
      color = black
      font = Courier New
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
      text = Благодарим за участие!
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  Routine show_idea
    RoutineSettingsComponent show_idea
      saveStartStop = False
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    TextComponent showIdeaText
      color = black
      durationEstim = 2
      font = Courier New
      letterHeight = 0.06
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $ideaText
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    TextComponent ideaQuestionText
      color = black
      durationEstim = 2
      font = Courier New
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Вы помните, что эта идея была озвучена?

        [Y] — да     [N] — нет
    KeyboardComponent showIdeaProceedButton
      allowedKeys = 'y', 'n'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent storeResponseKey
      Code Type = Auto->JS
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      End Routine:
        response = showIdeaProceedButton.keys
        if response == 'n':
            skipConfidence = True
            skipSource = True
        else:
            skipConfidence = False
            skipSource = False

        print(skipConfidence, skipSource, response)

        thisExp.addData('remembered', response)
  Routine confidence_evaluation
    RoutineSettingsComponent confidence_evaluation
      saveStartStop = False
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    CodeComponent skipConfidenceRoutine
      Code Type = Auto->JS
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      Begin Routine:
        if skipConfidence:
            continueRoutine = False
    TextComponent confidenceText
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Насколько вы уверены, что эту идею предложил именно партнёр, а не она была заимствована из другой идеи?
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    TextComponent confidenceTextHint
      color = black
      font = Courier New
      letterHeight = 0.035
      pos = (0, -0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = 0% — точно заимствована     100% — точно его/её идея
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    SliderComponent confidenceSlider
      borderColor = $(0.6000, 0.6941, 0.8510)
      fillColor = $(-0.4353, -0.5216, 0.0902)
      font = Courier New
      forceEndRoutine = False
      granularity = 0
      labels = ('0%', '50%', '100%')
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    TextComponent buttonText
      color = black
      font = Courier New
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Нажмите ENTER для подтверждения
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    KeyboardComponent confidenceProceedButton
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent skipSourceRoutine
      Code Type = Auto->JS
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      End Routine:
        confidenceValue = confidenceSlider.getRating()

        if confidenceValue is None:
            confidenceValue = -1

        thisExp.addData('confidence', confidenceValue)

        if confidenceValue != -1 and confidenceValue < 50:
            skipSource = False
        else:
            skipSource = True
  Routine source_evaluation
    RoutineSettingsComponent source_evaluation
      saveStartStop = False
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    CodeComponent skipSourceEvaluation
      Code Type = Auto->JS
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      Begin Routine:
        if skipSource:
            continueRoutine = False
    TextComponent sourceEvaluationText
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Вы указали, что эта идея, вероятно, была заимствована.

        Опишите, из какой идеи, по вашему мнению, она была взята:
    TextboxComponent sourceEvaluationTextBox
      autoLog = False
      bold = False
      borderColor = $(0.4353, 0.6314, 0.7804)
      borderWidth = 1
      color = black
      editable = True
      fillColor = $(0.5451, 0.7647, 0.8745)
      font = Courier New
      letterHeight = 0.05
      placeholder = Введите ваш ответ здесь...
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.4, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent sourceButtonText
      color = black
      font = Courier New
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Нажмите ENTER для подтверждения
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    KeyboardComponent sourceEvaluationButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent formatSourceText
      Code Type = Auto->JS
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      End Routine:
        sourceText = sourceEvaluationTextBox.getText()

        sourceText = sourceText.strip() if sourceText else ''

        thisExp.addData('source_description', sourceText)
  Routine confidence_evaluation_instruction
    RoutineSettingsComponent confidence_evaluation_instruction
      saveStartStop = False
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    CodeComponent showOnce
      Code Type = Auto->JS
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      Begin Routine:
        if ceInstructionCount >= 1 or skipConfidence or skipSource:
            continueRoutine = False
        else:
            ceInstructionCount += 1
    TextComponent ceInstructionText
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.21)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Вам будет предложено оценить, помните ли вы идею

        Если помните — вы оцените свою уверенность
        в том, кто именно был автором идеи.
    TextComponent ceInstructionHint
      color = black
      font = Courier New
      letterHeight = 0.035
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Нажмите [Д] — «да, помню»
        Нажмите [Н] — «нет, не помню»
    TextComponent ceInstructionButtonText
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Чтобы продолжить, нажмите ПРОБЕЛ
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    KeyboardComponent ceInstructionProceedButton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine save_routine
    RoutineSettingsComponent save_routine
      saveStartStop = False
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    CodeComponent saveTableRows
      Code Type = Auto->JS
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      Begin Routine:
        if skipConfidence:
            thisExp.addData('confidence', '')
        if skipSource:
            thisExp.addData('source_description', '')

        continueRoutine = False
  Routine routine_instructions
    RoutineSettingsComponent routine_instructions
      saveStartStop = False
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    CodeComponent onCoreItemChange
      Code Type = Auto->JS
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      Begin Routine:
        currentCoreItem = ideaCore

        if currentCoreItem == prevCoreItem:
            continueRoutine = False
        else:
            print(f'{currentCoreItem}')
            coreItemText.text = (f'{currentCoreItem}')
      End Routine:
        prevCoreItem = currentCoreItem
    TextComponent routineInstructionsText
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Ровно неделю назад Вы предлагали идеи необычного использования для следующего предмета:
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    TextComponent coreItemText
      color = black
      font = Courier New
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $currentCoreItem
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    KeyboardComponent coreItemButton
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $stimuliPath
    loopType = sequential
    nReps = 1
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    Routine routine_instructions
    Routine show_idea
    Routine confidence_evaluation_instruction
    Routine confidence_evaluation
    Routine source_evaluation
    Routine save_routine
  LoopTerminator trials
  Routine thank_you
